<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>20</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="A"/>
      <CellType TypeID="2" TypeName="B"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="A">10.0</Energy>
      <Energy Type1="A" Type2="A">10.0</Energy>
      <Energy Type1="Medium" Type2="B">10.0</Energy>
      <Energy Type1="B" Type2="B">10.0</Energy>
      
      <NeighborOrder>20</NeighborOrder>
      <WeightEnergyByDistance/>
   </Plugin>
   

</CompuCell3D>
