<CompuCell3D Revision="2" Version="4.6.0">

   <Metadata>
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
   </Metadata>

   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>5000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>

   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Cell"/>
   </Plugin>

   <Plugin Name="Volume">
      <Volume>
         <TargetVolume>25</TargetVolume>
         <LambdaVolume>10.0</LambdaVolume>
      </Volume>
   </Plugin>

   <Plugin Name="Contact">
      <Contact>
         <Energy Type1="Cell" Type2="Cell">10.0</Energy>
         <Energy Type1="Medium" Type2="Cell">15.0</Energy>
      </Contact>
   </Plugin>

   <Steppable Type="UniformInitializer">
      <!-- Empty initializer, as the steppable places cells -->
   </Steppable>

   <Steppable Type="Python" Module="ConcentricTubeSteppable" Class="ConcentricTubeSteppable" Frequency="1"/>

</CompuCell3D>
