<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="800" y="500" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Epi"/>
      <CellType TypeId="2" TypeName="Stroma"/>
      <CellType TypeId="3" TypeName="ECM"/>
      <CellType TypeId="4" TypeName="Muscle"/>
      <CellType TypeId="5" TypeName="Sfstroma"/>      
      
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Epi" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="Stroma" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="ECM" LambdaVolume="2.0" TargetVolume="50"/>
      <VolumeEnergyParameters CellType="Muscle" LambdaVolume="0.1" TargetVolume="2500"/>
      <VolumeEnergyParameters CellType="Sfstroma" LambdaVolume="2.0" TargetVolume="50"/>
      
      
   </Plugin>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell type has different force. --> 


      <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters --> 


      <!-- Algorithm options are: PixelBased, CenterOfMassBased --> 


      <Algorithm>PixelBased</Algorithm>
      <!-- <ExternalPotentialParameters CellType="Epi" x="-0.5" y="0.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="Stroma" x="0" y="2.0" z="0.0"/> -->
      <!-- <ExternalPotentialParameters CellType="ECM" x="-0.5" y="0.0" z="0.0"/> -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
   
</Plugin>
   
   

   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Epi">2.0</Energy>
      <Energy Type1="Medium" Type2="Stroma">5.0</Energy>
      <Energy Type1="Medium" Type2="ECM">10.0</Energy>
      <Energy Type1="Medium" Type2="Muscle">10.0</Energy>
      
      
      <Energy Type1="Epi" Type2="Epi">2.0</Energy>
      <Energy Type1="Epi" Type2="Stroma">10.0</Energy>
      <Energy Type1="Epi" Type2="ECM">5.0</Energy>
      <Energy Type1="Epi" Type2="Muscle">10.0</Energy>
      
      
      <Energy Type1="Stroma" Type2="Stroma">10.0</Energy>
      <Energy Type1="Stroma" Type2="ECM">12.0</Energy>
      <Energy Type1="Stroma" Type2="Muscle">10.0</Energy>    10 -----> 6
      
      <Energy Type1="ECM" Type2="ECM">10.0</Energy>
      <Energy Type1="ECM" Type2="Muscle">10.0</Energy>
      
      <Energy Type1="Muscle" Type2="Muscle">6.0</Energy>    10 ------> 6
      
      <Energy Type1="Sfstroma" Type2="Medium">2.0</Energy>
      <Energy Type1="Sfstroma" Type2="Sfstroma">2.0</Energy>
      <Energy Type1="Sfstroma" Type2="Epi">2.0</Energy>
      <Energy Type1="Sfstroma" Type2="ECM">5.0</Energy>
      <Energy Type1="Sfstroma" Type2="Stroma">10.0</Energy>
      <Energy Type1="Sfstroma" Type2="Muscle">10.0</Energy>
      
      
      
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <!-- <Plugin Name="ContactInternal"> -->
      <!-- &lt;!&ndash; Specification of internal adhesion energies &ndash;&gt;  -->


      <!-- <Energy Type1="Medium" Type2="Medium">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="Epi">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="Stroma">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="ECM">10.0</Energy> -->
      <!-- <Energy Type1="Epi" Type2="Epi">10.0</Energy> -->
      <!-- <Energy Type1="Epi" Type2="Stroma">10.0</Energy> -->
      <!-- <Energy Type1="Epi" Type2="ECM">10.0</Energy> -->
      <!-- <Energy Type1="Stroma" Type2="Stroma">10.0</Energy> -->
      <!-- <Energy Type1="Stroma" Type2="ECM">10.0</Energy> -->
      <!-- <Energy Type1="ECM" Type2="ECM">10.0</Energy> -->
      <!-- <NeighborOrder>4</NeighborOrder> -->
   <!-- </Plugin> -->
   
   <Plugin Name="LengthConstraint">
   
   <!-- Applies elongation constraint to each cell. Users specify target length of major axis -TargetLength (in 3D additionally, target length of minor axis - MinorTargetLength) and a strength of the constraint -LambdaLength. Parameters are specified for each cell type -->
   <!-- IMPORTANT: To prevent cell fragmentation for large elongations you need to also use connectivity constraint -->
   <!-- LengthConstraint plugin with no body: <Plugin Name="LengthConstraint"/> permits constraint specification for individual cells -->
   <!-- Comment out the constrains for cell types which don't need them -->
   <!-- <LengthEnergyParameters CellType="Epi" LambdaLength="2.0" TargetLength="25"/> -->
   <!-- <LengthEnergyParameters CellType="Stroma" LambdaLength="2.0" TargetLength="25"/> -->
   <!-- <LengthEnergyParameters CellType="ECM" LambdaLength="2.0" TargetLength="25"/> -->
   <!-- <LengthEnergyParameters CellType="Muscle" LambdaLength="2.0" TargetLength="25"/> -->
</Plugin>

   
   
   <Plugin Name="Chemotaxis">
   
   
    <ChemicalField Name="EPIgrad">
    <!-- <ChemotaxisByType Type="Stroma" Lambda="0.0"/> -->
    </ChemicalField>
</Plugin>




   
   <!-- <Plugin Name="Secretion"> -->
   
   <!-- &lt;!&ndash; Specification of secretion properties of select cell types. &ndash;&gt;  -->
   <!-- &lt;!&ndash; You may repeat Field element for each chemical field declared in the PDE solvers &ndash;&gt;  -->
   <!-- &lt;!&ndash; Specification of secretion properties of individual cells can be done in Python &ndash;&gt;  -->
   <!-- <Field Name="ECgrad"> -->
   <!-- </Field> -->
<!-- </Plugin> -->


    
    
    <Steppable Type="DiffusionSolverFE">
         <DiffusionField>
            <DiffusionData>
                <FieldName>EPIgrad</FieldName>
                <DiffusionConstant>0.50</DiffusionConstant>
                <DecayConstant>0.001</DecayConstant>
                <!-- <DiffusionCoefficient CellType="Epi">0.0</DiffusionCoefficient>             -->
            </DiffusionData>
            <SecretionData>
                <Secretion Type="Epi">50</Secretion>
            </SecretionData>
         </DiffusionField>
         <!-- <DiffusionField> -->
            <!-- <DiffusionData> -->
                <!-- <FieldName>SCgrad</FieldName> -->
                <!-- <DiffusionConstant>0.10</DiffusionConstant> -->
                <!-- <DecayConstant>0.001</DecayConstant> -->
                <!-- <DiffusionCoefficient CellType="Stroma">0.0</DiffusionCoefficient>             -->
            <!-- </DiffusionData> -->
            <!-- <SecretionData> -->
                <!-- <Secretion Type="Stroma">20</Secretion> -->
            <!-- </SecretionData> -->
        <!-- </DiffusionField> -->
    </Steppable>
   
   
   
   
   <Plugin Name="FocalPointPlasticity">
      
      <!-- &lt;!&ndash; Specification of focal point junctions &ndash;&gt;  -->


      <!-- &lt;!&ndash; We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification &ndash;&gt;  -->


      <!-- &lt;!&ndash; To modify FPP links individually for each cell pair uncomment line below &ndash;&gt;  -->


      <!-- &lt;!&ndash; <Local/> &ndash;&gt;  -->


      <!-- &lt;!&ndash; Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level &ndash;&gt;  -->


      <!-- &lt;!&ndash; See CC3D manual for details on FPP plugin  &ndash;&gt;  -->


      
      <!-- <Parameters Type1="Medium" Type2="Medium"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="Epi"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="Stroma"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <Parameters Type1="Epi" Type2="Epi">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>5</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
      </Parameters>
      
      <Parameters Type1="Muscle" Type2="Muscle">
         <Lambda>15</Lambda>                       10 -------> 15                     To change the strength of the FPP links, you modify lambda 
         <ActivationEnergy>-50</ActivationEnergy>                                     Determines how energetically favorable it is to create a link.
         <TargetDistance>20</TargetDistance>                                          The preferred resting distance between two linked cells. Changing this alters the equilibrium spacing, not the force strength.
         <MaxDistance>30</MaxDistance>                        20 -----> 30            Beyond this distance, links break.        
         <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>             Limits how many links a cell can form.
      </Parameters>
      <!-- <Parameters Type1="Muscle" Type2="Muscle"> -->
         <!-- &lt;!&ndash; <Lambda>10</Lambda> &ndash;&gt;  -->


         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- &lt;!&ndash; <TargetDistance>7</TargetDistance> &ndash;&gt;  -->


         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Epi" Type2="Stroma"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Epi" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Stroma" Type2="Stroma"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Stroma" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <Parameters Type1="ECM" Type2="ECM">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>4</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">2</MaxNumberOfJunctions>
      </Parameters>
      
      <!-- <InternalParameters Type1="Medium" Type2="Medium"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="Epi"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="Stroma"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Epi" Type2="Epi"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Epi" Type2="Stroma"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Epi" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Stroma" Type2="Stroma"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Stroma" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="ECM" Type2="ECM"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="200" z="0"/>
         <BoxMax x="800" y="250" z="1"/>
         <Gap>0</Gap>
         <Width>50</Width>
         <Types>Muscle</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="250" z="0"/>
         <BoxMax x="800" y="264" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Stroma</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="264" z="0"/>
         <BoxMax x="800" y="271" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Sfstroma</Types>
      </Region>
      
      
      <Region>
         <BoxMin x="0" y="271" z="0"/>
         <BoxMax x="800" y="278" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>ECM</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="278" z="0"/>
         <BoxMax x="800" y="285" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Epi</Types>
      </Region>
   </Steppable>
</CompuCell3D>
