<CompuCell3D Revision="2" Version="4.6.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="400" y="300" z="1"/>
      <Steps>100000</Steps>
      <Temperature>5.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <!-- <Boundary_x>Periodic</Boundary_x> -->
   </Potts>
  7        
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="s1"/>
      <CellType TypeId="2" TypeName="e1"/>
      <CellType TypeId="3" TypeName="e2"/>
      <CellType TypeId="4" TypeName="s2"/>
      <CellType TypeId="5" TypeName="ecm"/>
   </Plugin>
   
   <Plugin Name="Volume">
       <VolumeEnergyParameters CellType="s1" LambdaVolume="2.0" TargetVolume="25"/>
       <VolumeEnergyParameters CellType="e1" LambdaVolume="2.0" TargetVolume="50"/>
       <VolumeEnergyParameters CellType="e2" LambdaVolume="2.0" TargetVolume="50"/>
       <VolumeEnergyParameters CellType="s2" LambdaVolume="2.0" TargetVolume="50"/>
       <VolumeEnergyParameters CellType="ecm" LambdaVolume="2.0" TargetVolume="10"/>
   </Plugin>

   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="s1">0.0</Energy>
      <Energy Type1="Medium" Type2="e1">10.0</Energy>
      <Energy Type1="Medium" Type2="e2">10.0</Energy>
      <Energy Type1="Medium" Type2="s2">10.0</Energy>
      <Energy Type1="Medium" Type2="ecm">5.0</Energy>
      <Energy Type1="s1" Type2="s1">10.0</Energy>
      <Energy Type1="s1" Type2="e1">10.0</Energy>
      <Energy Type1="s1" Type2="e2">10.0</Energy>
      <Energy Type1="s1" Type2="s2">10.0</Energy>
      <Energy Type1="s1" Type2="ecm">5.0</Energy>
      <Energy Type1="e1" Type2="e1">5.0</Energy>
      <Energy Type1="e1" Type2="e2">10.0</Energy>
      <Energy Type1="e1" Type2="s2">10.0</Energy>
      <Energy Type1="e1" Type2="ecm">10.0</Energy>
      <Energy Type1="e2" Type2="e2">10.0</Energy>
      <Energy Type1="e2" Type2="s2">10.0</Energy>
      <Energy Type1="e2" Type2="ecm">10.0</Energy>
      <Energy Type1="s2" Type2="s2">10.0</Energy>
      <Energy Type1="s2" Type2="ecm">10.0</Energy>
      <Energy Type1="ecm" Type2="ecm">10.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   
   <Plugin Name="PixelTracker">
   
   <!-- Module tracking pixels of each cell -->
</Plugin>

   
   <!-- <Plugin Name="ContactInternal"> -->
      <!-- &lt;!&ndash; Specification of internal adhesion energies &ndash;&gt;  -->
      <!-- <Energy Type1="Medium" Type2="Medium">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="s1">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="e1">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="e2">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="s2">10.0</Energy> -->
      <!-- <Energy Type1="Medium" Type2="ecm">10.0</Energy> -->
      <!-- <Energy Type1="s1" Type2="s1">10.0</Energy> -->
      <!-- <Energy Type1="s1" Type2="e1">10.0</Energy> -->
      <!-- <Energy Type1="s1" Type2="e2">10.0</Energy> -->
      <!-- <Energy Type1="s1" Type2="s2">10.0</Energy> -->
      <!-- <Energy Type1="s1" Type2="ecm">10.0</Energy> -->
      <!-- <Energy Type1="e1" Type2="e1">10.0</Energy> -->
      <!-- <Energy Type1="e1" Type2="e2">10.0</Energy> -->
      <!-- <Energy Type1="e1" Type2="s2">10.0</Energy> -->
      <!-- <Energy Type1="e1" Type2="ecm">10.0</Energy> -->
      <!-- <Energy Type1="e2" Type2="e2">10.0</Energy> -->
      <!-- <Energy Type1="e2" Type2="s2">10.0</Energy> -->
      <!-- <Energy Type1="e2" Type2="ecm">10.0</Energy> -->
      <!-- <Energy Type1="s2" Type2="s2">10.0</Energy> -->
      <!-- <Energy Type1="s2" Type2="ecm">10.0</Energy> -->
      <!-- <Energy Type1="ecm" Type2="ecm">10.0</Energy> -->
      <!-- <NeighborOrder>4</NeighborOrder> -->
   <!-- </Plugin> -->
   
   <Plugin Name="VolumeLocalFlex"/>

   <Plugin Name="ExternalPotential">
       <ExternalPotentialParameters id="water_force" CellType="ecm" x="0" y="0" z="0"/>
   </Plugin>
   

   
   <Plugin Name="FocalPointPlasticity">
      
      <!-- Specification of focal point junctions -->
      <!-- We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification -->
      <!-- To modify FPP links individually for each cell pair uncomment line below -->
      <Local/>
      <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level -->
      <!-- See CC3D manual for details on FPP plugin  -->
      
      <!-- <Parameters Type1="Medium" Type2="Medium"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="s1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="e1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="Medium" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s1" Type2="s1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s1" Type2="e1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s1" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s1" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s1" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <Parameters Type1="e1" Type2="e1">
         <Lambda>10</Lambda>
         <ActivationEnergy>-50</ActivationEnergy>
         <TargetDistance>7</TargetDistance>
         <MaxDistance>20</MaxDistance>
         <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
      </Parameters>
      
      <!-- <Parameters Type1="e1" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="e1" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="e1" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="e2" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="e2" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="e2" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s2" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="s2" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <Parameters Type1="ecm" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </Parameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="Medium"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="s1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="e1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="Medium" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s1" Type2="s1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s1" Type2="e1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s1" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s1" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s1" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e1" Type2="e1"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e1" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e1" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e1" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e2" Type2="e2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e2" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="e2" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s2" Type2="s2"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="s2" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <!-- <InternalParameters Type1="ecm" Type2="ecm"> -->
         <!-- <Lambda>10</Lambda> -->
         <!-- <ActivationEnergy>-50</ActivationEnergy> -->
         <!-- <TargetDistance>7</TargetDistance> -->
         <!-- <MaxDistance>20</MaxDistance> -->
         <!-- <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions> -->
      <!-- </InternalParameters> -->
      
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- <Initial layout of cells in the form of rectangular slab> -->
      <!-- <Region> -->
         <!-- <BoxMin x="0" y="0" z="0"/> -->
         <!-- <BoxMax x="400" y="100" z="1"/> -->
         <!-- <Gap>0</Gap> -->
         <!-- <Width>7</Width> -->
         <!-- <Types>s1</Types> -->
      <!-- </Region> -->
      
      <Region>
         <BoxMin x="0" y="150" z="0"/>
         <BoxMax x="400" y="155" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>e1</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="180" z="0"/>
         <BoxMax x="400" y="185" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>e2</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="185" z="0"/>
         <BoxMax x="400" y="300" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>s2</Types>
      </Region>
   </Steppable>
   
   <Steppable Type="DiffusionSolverFE">
   
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="MATRIX">
      <DiffusionData>
         <FieldName>MATRIX</FieldName>
         <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
         <GlobalDecayConstant>0.0</GlobalDecayConstant>
         <!-- Additional options are: -->
         <InitialConcentrationExpression>2.0</InitialConcentrationExpression> 
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <DiffusionCoefficient CellType="s1">0.1</DiffusionCoefficient>
         <DiffusionCoefficient CellType="e1">0.1</DiffusionCoefficient>
         <DiffusionCoefficient CellType="e2">0.1</DiffusionCoefficient>
         <DiffusionCoefficient CellType="s2">0.1</DiffusionCoefficient>
         <DiffusionCoefficient CellType="ecm">0.1</DiffusionCoefficient>
         <DecayCoefficient CellType="s1">0.0001</DecayCoefficient>
         <DecayCoefficient CellType="e1">0.0001</DecayCoefficient>
         <DecayCoefficient CellType="e2">0.0001</DecayCoefficient>
         <DecayCoefficient CellType="s2">0.0001</DecayCoefficient>
         <DecayCoefficient CellType="ecm">0.0001</DecayCoefficient>
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         
         <!-- Uniform secretion Definition -->
         <Secretion Type="s1">0.1</Secretion>
         <Secretion Type="e1">0.1</Secretion>
         <Secretion Type="e2">0.1</Secretion>
         <Secretion Type="s2">0.1</Secretion>
         <Secretion Type="ecm">0.1</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="s1,e1,e2,s2,ecm" Type="ecm">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="ecm">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantDerivative PlanePosition="Min" Value="0.0"/>
            <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            <!-- Other options are (examples): -->
            <Periodic/> 
            <!-- <ConstantValue PlanePosition="Min" Value="1.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="0.0"/>
            <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="1.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   
</Steppable>

   
   
   

</CompuCell3D>
