<CompuCell3D Revision="0" Version="4.7.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
      <MCSConversionFactor DisplayName="No conversion" Units="-">1.0</MCSConversionFactor>
      <VoxelConversionFactor DisplayName="No conversion" Units="-">1.0</VoxelConversionFactor>
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="300" y="300" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Strm_1"/>
      <CellType TypeId="2" TypeName="Matrix"/>
      <CellType TypeId="3" TypeName="Epi_1"/>
   </Plugin>
   
   <Plugin Name="Volume">
   <!-- <VolumeEnergyParameters CellType="Strm_1" LambdaVolume="2.0" TargetVolume="30"/> -->
   <!-- <VolumeEnergyParameters CellType="Matrix" LambdaVolume="2.0" TargetVolume="10"/> -->
   <VolumeEnergyParameters CellType="Epi_1" LambdaVolume="2.0" TargetVolume="100"/>
</Plugin>

   
<Plugin Name="ExternalPotential">
   
   <!-- External force applied to cell. Each cell type has different force. -->
   <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
   <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
   <Algorithm>PixelBased</Algorithm>
   <ExternalPotentialParameters CellType="Strm_1" x="-0.5" y="0.0" z="0.0"/>
   <!-- <ExternalPotentialParameters CellType="Matrix" x="-0.5" y="0.0" z="0.0"/> -->
   <!-- <ExternalPotentialParameters CellType="Epi_1" x="-0.5" y="0.0" z="0.0"/> -->
</Plugin>
   
   
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Strm_1">10.0</Energy>
      <Energy Type1="Medium" Type2="Matrix">10.0</Energy>
      <Energy Type1="Medium" Type2="Epi_1">10.0</Energy>
      
      <Energy Type1="Strm_1" Type2="Strm_1">10.0</Energy>
      <Energy Type1="Epi_1" Type2="Epi_1">1.0</Energy>
      <Energy Type1="Matrix" Type2="Matrix">10.0</Energy>
      
      <Energy Type1="Strm_1" Type2="Matrix">3.0</Energy>
      <Energy Type1="Strm_1" Type2="Epi_1">10.0</Energy>
      <Energy Type1="Matrix" Type2="Epi_1">10.0</Energy>
      
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="300" y="130" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>Strm_1,Matrix,Matrix,Matrix,Matrix</Types>
      </Region>
      
      <Region>
         <BoxMin x="0" y="130" z="0"/>
         <BoxMax x="300" y="135" z="1"/>
         <Gap>0</Gap>```
         <Width>7</Width>
         <Types>Epi_1</Types>
      </Region>
   </Steppable>
</CompuCell3D>
